base_dir = "D:/Data/Tong/MAARS/";
//base_dir = "/home/tong/Documents/code/MAARS/";
//base_dir = "/home/hadim/Documents/phd/dev/MAARS/";
//base_dir = "/Users/theoli89/Documents/MAARS/";

addClassPath(base_dir + "target/MAARS_-1.0.jar");

import org.micromanager.utils.ReportingUtils;
import au.com.bytecode.opencsv.CSVWriter;
import java.util.List;
import fiji.plugin.maars.maarslib.*;
import fiji.plugin.maars.maarslib.MaarsMainDialog;
import fiji.plugin.maars.maarslib.AllMaarsParameters;
import fiji.plugin.maars.maarslib.ExplorationXYPositions;
import mmcorej.*;
import org.micromanager.api.*;
import ij.*;
import java.io.IOException;
import com.google.gson.JsonElement;
import com.google.gson.JsonObject;
import java.util.HashMap;
import fiji.plugin.maars.cellstateanalysis.Cell;

double calibration = gui.getMMCore().getPixelSizeUm();
mmc.setAutoShutter(false);
mmc.waitForDevice(mmc.getShutterDevice());

gui.message("Create main window");
MaarsMainDialog md = null;

try {
	md = new MaarsMainDialog(gui, mmc, base_dir + "maars_config.txt");
} catch (IOException e) {
	gui.message("Error");
}

gui.message("Show main window");
md.show();

while(md.isVisible()) {
	gui.sleep(1000);
}

if(md.isOkClicked()) {
	start = System.currentTimeMillis();
	gui.message("start "+start);
	AllMaarsParameters param = null;
	autofocus = gui.getAutofocus();
	param = md.getParameters();
	mmc.setOriginXY(mmc.getXYStageDevice());
	int nbXField = param
						.getParametersAsJsonObject()
						.get(AllMaarsParameters.EXPLORATION_PARAMETERS)
						.getAsJsonObject()
						.get(AllMaarsParameters.X_FIELD_NUMBER)
						.getAsInt();
	int nbYField = param
						.getParametersAsJsonObject()
						.get(AllMaarsParameters.EXPLORATION_PARAMETERS)
						.getAsJsonObject()
						.get(AllMaarsParameters.Y_FIELD_NUMBER)
						.getAsInt();
	gui.message("nb x field "+nbXField+" nb y field "+nbYField);
	String[] outputHeader = new String[]{
		"Cell",
		"Second",
		"Feature",
		"NbOfSpotDetected",
		"CellCenterX",
		"CellCenterY",
		"CellAbsoMajAng",
		"CellMajLength",
		"CellMinLength",
		"SpAbsoAng",
		"SpAngToMaj",
		"SpLength",
		"spb1X",
		"spb1Y",
		"spb1Z",
		"spb2X",
		"spb2Y",
		"spb2Z",
		"SpCenterX",
		"SpCenterY",
		"SpCenterZ",
		"CellCenterToSpCenterLen",
		"CellCenterToSpCenterAng",
		"fieldX",
		"fieldY"
	};
	if (nbXField * nbYField != 0){
		ExplorationXYPositions explo = new ExplorationXYPositions(nbXField,
														nbYField,
														(double) mmc.getImageWidth()*calibration,
														(double) mmc.getImageHeight()*calibration);
		for (int i = 0; i < explo.length(); i++) {
			gui.message("x : "+explo.getX(i)+" y : "+explo.getY(i));
			double xPos = explo.getX(i);
			double yPos = explo.getY(i);
			
			gui.setXYStagePosition(xPos,yPos);
			
			MaarsAcquisitionForSegmentation mas = new MaarsAcquisitionForSegmentation(md,
					xPos,
					yPos);
	
			mmc.waitForDevice(mmc.getXYStageDevice());
	
			autofocus.fullFocus();
	
			HashMap params = mas.getParametersFromConf(param);
			mas.setParameters(params);
			//--------------------------BF acquisition-----------------------------//
			mas.acquire(true);
			//--------------------------segmentation-----------------------------//
			MaarsSegmentation ms = new MaarsSegmentation(param,
				xPos,
				yPos);
			ms.segmentation();
			ms.writeUsedConfig();
			if(ms.roiDetected()){
			//----------------if got ROI, start fluo-acquisition --------//
				MaarsFluoAnalysis mfa = new MaarsFluoAnalysis(param, ms.getSegmentationObject(), xPos, yPos);
//				MaarsAcquisitionMitosis mmad = new MaarsAcquisitionMitosis(md, mfa, xPos, yPos);
				MaarsAcquisitionForFluoAnalysis mafa = new MaarsAcquisitionForFluoAnalysis(md,
																xPos,
																yPos,
																mfa.getSetOfCells());
				List cellsInAllFields = new ArrayList();	
//////////////////////////multiple snapshot per field//////////////////////////////
				if(param
					.getParametersAsJsonObject()
					.get(AllMaarsParameters.FLUO_ANALYSIS_PARAMETERS)
					.getAsJsonObject()
					.get(AllMaarsParameters.DYNAMIC)
					.getAsBoolean()) {
					int timeInterval = param.getParametersAsJsonObject()
							.get(AllMaarsParameters.MITOSIS_MOVIE_PARAMETERS)
							.getAsJsonObject().get(AllMaarsParameters.TIME_INTERVAL)
							.getAsInt();
					double startTime = System.currentTimeMillis();
					int frame = 0;
					double timeLimit = param.getParametersAsJsonObject()
							.get(AllMaarsParameters.MITOSIS_MOVIE_PARAMETERS)
							.getAsJsonObject()
							.get(AllMaarsParameters.END_MOVIE_CONDITIONS)
							.getAsJsonObject().get(AllMaarsParameters.VALUES)
							.getAsJsonObject().get(AllMaarsParameters.TIME_LIMIT)
							.getAsDouble() * 60 * 1000;
					spindleWriter = new FileWriter(AllMaarsParameters.convertPath(param
													.getParametersAsJsonObject()
													.get(AllMaarsParameters.MITOSIS_MOVIE_PARAMETERS)
													.getAsJsonObject().get(AllMaarsParameters.SAVING_PATH)
													.getAsString()
													+ "/movie_X"
													+ Math.round(xPos)
													+ "_Y"
													+ Math.round(yPos) + "_FLUO/spindleAnalysis.csv"));
					writer = new CSVWriter(spindleWriter,'\t',CSVWriter.NO_QUOTE_CHARACTER);
					writer.writeNext(outputHeader);
					while (System.currentTimeMillis() - startTime <= timeLimit)
						{
							double beginAcq = System.currentTimeMillis();

							String channels = param.getParametersAsJsonObject()
								.get(AllMaarsParameters.FLUO_ANALYSIS_PARAMETERS)
								.getAsJsonObject().get(AllMaarsParameters.FLUO_CHANNELS)
								.getAsString();
							String[] arrayChannels = channels.split(",", -1);
							for (String channel:arrayChannels) {
								ImagePlus fluoImage = mafa.acquire(true, frame, channel);
								cellsInAllFields.addAll(
									mfa.analyzeEntireFieldReturnListSp(fluoImage, frame, channel)
								);
							}
							mfa.getSetOfCells().closeRoiManager();
							frame++;
							double acqTook = System.currentTimeMillis() - beginAcq;
							gui.sleep((long) (timeInterval - acqTook));	
							acqNameFluo = null;
							fluoImage = null;		
						}
/////////////////////////write spindle coordinates///////////////////////////////////
					writer.writeAll(cellsInAllFields);
					spindleWriter.close();
					writer.close();
////////////////////////////one snapshot per field/////////////////////////////////																			
				}else {
					int frame = 0;
					String channels = param.getParametersAsJsonObject()
							.get(AllMaarsParameters.FLUO_ANALYSIS_PARAMETERS)
							.getAsJsonObject().get(AllMaarsParameters.FLUO_CHANNELS)
							.getAsString();
					String[] arrayChannels = channels.split(",", -1);
					for (String channel:arrayChannels) {
						ImagePlus fluoImage = mafa.acquire(true, frame, channel);
						cellsInAllFields.addAll(
							mfa.analyzeEntireFieldReturnListSp(fluoImage, frame, channel)
						);
					}
					acqNameFluo = null;
					fluoImage = null;
				}
///////////////////////////save cropped images//////////////////////////////////////
				if (param.getParametersAsJsonObject()
					.get(AllMaarsParameters.FLUO_ANALYSIS_PARAMETERS)
					.getAsJsonObject()
					.get(AllMaarsParameters.SAVE_FLUORESCENT_MOVIES)
					.getAsBoolean()) {
					mfa.saveCroppedImgs();
				}
				// close roi manager
				mfa.getSetOfCells().closeRoiManager();
				mas.setParameters(params);
			}
		}
		mmc.setAutoShutter(true);
		mmc.waitForDevice(mmc.getShutterDevice());
		gui.message("end "+System.currentTimeMillis());
		gui.message("it took "+(System.currentTimeMillis()-start));
		gui.message("DONE.");
	}else{
		gui.message("Session aborted, 0 field to analyse");
	}
	}else{
		gui.message("Session aborted, click 'OK' to start analyse.");
}
