package fiji.plugin.maars.cellstateanalysis;

import java.util.ArrayList;
import java.util.HashMap;
import java.util.Map;

import org.micromanager.utils.ReportingUtils;

import fiji.plugin.trackmate.Spot;
import fiji.plugin.trackmate.Model;
import fiji.plugin.trackmate.Settings;
import fiji.plugin.trackmate.detection.LogDetectorFactory;
import fiji.plugin.trackmate.features.FeatureFilter;
import fiji.plugin.trackmate.TrackMate;
import ij.IJ;
import ij.ImagePlus;
import ij.measure.Calibration;
import ij.plugin.ZProjector;

//ImagePlus imp = IJ.open("MAX_MMStack_Pos0.ome.tif");
//ImagePlus imp = IJ.openImage("/Users/theoli89/Desktop/curioData/Virtual/movie_X0_Y0_FLUO/0/1.tif");
ImagePlus imp = IJ.getImage();
for(int i = 0; i<6000;i++){
Model model = new Model();

Settings settings = new Settings();
settings.setFrom(imp);

settings.detectorFactory = new LogDetectorFactory();
Map detectorSettings = new HashMap();
detectorSettings.put("DO_SUBPIXEL_LOCALIZATION", true);
detectorSettings.put("RADIUS", (double) 0.4);
detectorSettings.put("TARGET_CHANNEL", 1);
detectorSettings.put("THRESHOLD", 0.);
detectorSettings.put("DO_MEDIAN_FILTERING", false);
settings.detectorSettings = detectorSettings;

FeatureFilter filter1 = new FeatureFilter("QUALITY", 1, true);
settings.addSpotFilter(filter1);

TrackMate trackmate = new TrackMate(model, settings);
print("Trackmate created");

trackmate.execDetection();
print("execDetection done");

trackmate.execInitialSpotFiltering();
print("execInitialSpotFiltering done");

trackmate.computeSpotFeatures(true);
print("computeSpotFeatures done");

trackmate.execSpotFiltering(true);
print("execSpotFiltering done");

print("- get results");

int nSpots = trackmate.getModel().getSpots().getNSpots(false);
print("Found " + nSpots + " spots");
//for (Spot spot : trackmate.getModel().getSpots().iterable(false)) {
//	print(spot.getFeatures());
//}
imp.close();
}