addClassPath("/home/tong/Documents/code/MAARS/MaarsLib/target/MaarsLib-1.0.jar");
addClassPath("/home/tong/Documents/code/MAARS/CellsBoundaries/target/CellsBoundaries-1.0.jar");
addClassPath("/home/tong/Documents/code/MAARS/CellStateAnalysis/target/CellStateAnalysis-1.0.jar");
//addClassPath("C:/Program Files/Micro-Manager-1.4/jars/MaarsLib.jar");
import fiji.plugin.maars.maarslib.*;
import fiji.plugin.maars.maarslib.MaarsMainDialog;
import fiji.plugin.maars.maarslib.AllMaarsParameters;
import fiji.plugin.maars.maarslib.ExplorationXYPositions;
import fiji.plugin.maars.cellstateanalysis.SetOfCells;
import mmcorej.*;
import org.micromanager.api.*;
import ij.*;
import java.io.IOException;
import com.google.gson.JsonElement;
import com.google.gson.JsonObject;
import java.util.HashMap;
import ij.io.Opener;

double calibration = gui.getMMCore().getPixelSizeUm();
mmc.setAutoShutter(false);
mmc.waitForDevice(mmc.getShutterDevice());

gui.message("Create main window");
MaarsMainDialog md = null;
try {
	md = new MaarsMainDialog(gui, mmc, "/home/tong/Documents/code/MAARS/MaarsLib/");
	//md = new MaarsMainDialog(gui, mmc, "/home/marie/workspace/MaarsLib/");
	//md = new MaarsMainDialog(gui, mmc, "D:/Data/marie/");
} catch (IOException e) {
	gui.message("Error");
}

gui.message("Show main window");

md.show();

while(md.isVisible()) {
	gui.sleep(1000);
}

if(md.isOkClicked()) {
	start = System.currentTimeMillis();
	gui.message("start "+start);
	AllMaarsParameters param = null;
	autofocus = gui.getAutofocus();
	param = md.getParameters();
	mmc.setOriginXY(mmc.getXYStageDevice());
	int nbXField = param
						.getParametersAsJsonObject()
						.get(AllMaarsParameters.EXPLORATION_PARAMETERS)
						.getAsJsonObject()
						.get(AllMaarsParameters.X_FIELD_NUMBER)
						.getAsInt();
	int nbYField = param
						.getParametersAsJsonObject()
						.get(AllMaarsParameters.EXPLORATION_PARAMETERS)
						.getAsJsonObject()
						.get(AllMaarsParameters.Y_FIELD_NUMBER)
						.getAsInt();
	
	gui.message("nb x field "+nbXField+" nb y field "+nbYField);

	if (nbXField * nbYField != 0){
		ExplorationXYPositions explo = new ExplorationXYPositions(nbXField,
													nbYField,
													(double) mmc.getImageWidth()*calibration,
													(double) mmc.getImageHeight()*calibration);
		MaarsAcquisitionForSegmentation mas = new MaarsAcquisitionForSegmentation(md,
				0,
				0);

		HashMap params = mas.getParametersFromConf(param);
		params.put("shutter","DShutter");
		mas.setParameters(params);
		
		String pathToRootDir = param.getParametersAsJsonObject()
				.get(AllMaarsParameters.MITOSIS_MOVIE_PARAMETERS)
				.getAsJsonObject().get(AllMaarsParameters.SAVING_PATH)
				.getAsString();
		String pathToFluoImg = pathToRootDir;

		Opener opener = new Opener();  
		String pathToBf = pathToRootDir +"best/movie_X0_Y0/Segment_MMStack_Pos0.ome.tif";
		ImagePlus bfImg = opener.openImage(pathToBf);
		
		String pathToCorrImg = pathToRootDir +"best/movie_X0_Y0/rescaled_DUP_Segment_MMStack_Pos0.ome_CorrelationImage.tif";
		ImagePlus corrImg = opener.openImage(pathToCorrImg);

		String pathToFluoImg = pathToRootDir +"best/movie_X0_Y0/rescaled_DUP_Segment_MMStack_Pos0.ome_FLUO.tif";
		ImagePlus fluoImage = opener.openImage(pathToFluoImg);

		String pathToRoiZip = pathToRootDir + "best/movie_X0_Y0/rescaled_DUP_Segment_MMStack_Pos0.ome_ROI.zip";

		int focusSlice = 16; // =33/2
		
		//SetOfCells soc = new SetOfCells(bfImg, corrImg, focus, direction, pathToRoiZip, savePath);
		SetOfCells soc = new SetOfCells(bfImg, corrImg, focusSlice, -1, pathToRoiZip, pathToRootDir);
		MaarsFluoAnalysis mfa = new MaarsFluoAnalysis(param, soc);
		MaarsAcquisitionMitosis mmad = new MaarsAcquisitionMitosis(md, mfa, 0, 0);

		mfa.getSetOfCells().shuffle();

		MaarsAcquisitionForFluoAnalysis mafa = new MaarsAcquisitionForFluoAnalysis(md,
														0,
														0,
														soc);

		if(param
				.getParametersAsJsonObject()
				.get(AllMaarsParameters.FLUO_ANALYSIS_PARAMETERS)
				.getAsJsonObject()
				.get(AllMaarsParameters.FIND_BEST_MITOSIS_IN_FIELD)
				.getAsBoolean()) {

			int cellNumber = mfa.analyzeEntireField(fluoImage, pathToRootDir +"best/movie_X0_Y0/rescaled_DUP_Segment_MMStack_Pos0.ome");
			if (cellNumber != -1) {
				mmad.acquire(false, cellNumber, true, true);
			}
		}else {
			int j = 0;
			boolean mitosis = false;
			while(j <  mfa.getSetOfCells().length() && !mitosis) {
				ImagePlus fluoImage = mafa.acquire(false, j);
				fluoImage.show();
				if (mfa.checkStartConditions(mfa.getSpindle(fluoImage, j))) {
					gui.message("mitosis");
					mmad.acquire(true, j, false); //don't crop image because it is already cropped
					mitosis = true;
				}
				j++;
			}
		}
		// close roi manager
		mfa.getSetOfCells().closeRoiManager();
		mas.setupParameters();
	}

	mmc.setAutoShutter(true);
	mmc.waitForDevice(mmc.getShutterDevice());
	gui.message("end "+System.currentTimeMillis());
	gui.message("it took "+(System.currentTimeMillis()-start));
	gui.message("DONE.");
	}else{
		gui.message("Session aborted, 0 field to analyse");
	}
	}else{
		gui.message("Session aborted, click 'OK' to start analyse.");
}
