base_dir = "D:/Data/Tong/MAARS/";
//base_dir = "/home/tong/Documents/code/MAARS/";
//base_dir = "/home/hadim/Documents/phd/dev/MAARS/";
//base_dir = "/Users/theoli89/Documents/MAARS/";

addClassPath(base_dir + "MaarsLib/target/MaarsLib-1.0.jar");
addClassPath(base_dir + "CellsBoundaries/target/CellsBoundaries-1.0.jar");
addClassPath(base_dir + "CellStateAnalysis/target/CellStateAnalysis-1.0.jar");

import fiji.plugin.maars.maarslib.*;
import fiji.plugin.maars.maarslib.MaarsMainDialog;
import fiji.plugin.maars.maarslib.AllMaarsParameters;
import fiji.plugin.maars.maarslib.ExplorationXYPositions;
import mmcorej.*;
import org.micromanager.api.*;
import ij.*;
import java.io.IOException;
import com.google.gson.JsonElement;
import com.google.gson.JsonObject;
import java.util.HashMap;
import fiji.plugin.maars.cellstateanalysis.Cell;

double calibration = gui.getMMCore().getPixelSizeUm();
mmc.setAutoShutter(false);
mmc.waitForDevice(mmc.getShutterDevice());

gui.message("Create main window");
MaarsMainDialog md = null;
try {
	//md = new MaarsMainDialog(gui, mmc, "/Users/theoli89/Documents/MAARS/MaarsLib/");
	//md = new MaarsMainDialog(gui, mmc, "/home/tong/Documents/code/MAARS/MaarsLib/");
	md = new MaarsMainDialog(gui, mmc, "D:/Data/Tong/MAARS/MaarsLib/");
} catch (IOException e) {
	gui.message("Error");
}

gui.message("Show main window");

md.show();

while(md.isVisible()) {
	gui.sleep(1000);
}

if(md.isOkClicked()) {
	start = System.currentTimeMillis();
	gui.message("start "+start);
	AllMaarsParameters param = null;
	autofocus = gui.getAutofocus();
	param = md.getParameters();
	mmc.setOriginXY(mmc.getXYStageDevice());
	int nbXField = param
						.getParametersAsJsonObject()
						.get(AllMaarsParameters.EXPLORATION_PARAMETERS)
						.getAsJsonObject()
						.get(AllMaarsParameters.X_FIELD_NUMBER)
						.getAsInt();
	int nbYField = param
						.getParametersAsJsonObject()
						.get(AllMaarsParameters.EXPLORATION_PARAMETERS)
						.getAsJsonObject()
						.get(AllMaarsParameters.Y_FIELD_NUMBER)
						.getAsInt();
	
	gui.message("nb x field "+nbXField+" nb y field "+nbYField);

	if (nbXField * nbYField != 0){
	ExplorationXYPositions explo = new ExplorationXYPositions(nbXField,
													nbYField,
													(double) mmc.getImageWidth()*calibration,
													(double) mmc.getImageHeight()*calibration);

	for (int i = 0; i < explo.length(); i++) {
		gui.message("x : "+explo.getX(i)+" y : "+explo.getY(i));
		
		gui.setXYStagePosition(explo.getX(i),explo.getY(i));
		
		MaarsAcquisitionForSegmentation mas = new MaarsAcquisitionForSegmentation(md,
				explo.getX(i),
				explo.getY(i));

		mmc.waitForDevice(mmc.getXYStageDevice());

		autofocus.fullFocus();
		HashMap params = mas.getParametersFromConf(param);
		mas.setParameters(params);
		mas.acquire(false);

		MaarsSegmentation ms = new MaarsSegmentation(param, mas.getPathToMovie()+"/MMStack_Pos0.ome.tif");
		ms.segmentation();
		while(ms.isAnalysing()) {
			gui.sleep(3000);
		}

		MaarsFluoAnalysis mfa = new MaarsFluoAnalysis(param, ms.getSegmentationObject());
		MaarsAcquisitionMitosis mmad = new MaarsAcquisitionMitosis(md, mfa, explo.getX(i), explo.getY(i));
		
		
		mfa.getSetOfCells().shuffle();
		
		MaarsAcquisitionForFluoAnalysis mafa = new MaarsAcquisitionForFluoAnalysis(md,
														explo.getX(i),
														explo.getY(i),
														mfa.getSetOfCells());

		if(param
				.getParametersAsJsonObject()
				.get(AllMaarsParameters.FLUO_ANALYSIS_PARAMETERS)
				.getAsJsonObject()
				.get(AllMaarsParameters.FIND_BEST_MITOSIS_IN_FIELD)
				.getAsBoolean()) {
					
			String acqNameFluo = "/movie_X"
				+Math.round(explo.getX(i))
				+"_Y"+Math.round(explo.getY(i))
				+"_FLUO";
			
			ImagePlus fluoImage = mafa.acquire(false, acqNameFluo);
			fiji.plugin.maars.cellstateanalysis.Cell tragetCell = mfa.analyzeEntireField(fluoImage, mas.getPathToMovie()
						+"/movie_X"+Math.round(explo.getX(i))
						+"_Y"+Math.round(explo.getY(i)));
			mfa.getSetOfCells().closeRoiManager();
			if(tragetCell != null){	
				mmad.acquire(false, tragetCell, true, true);
			}																						
		}
		else {
			int timeInterval = param.getParametersAsJsonObject()
					.get(AllMaarsParameters.MITOSIS_MOVIE_PARAMETERS)
					.getAsJsonObject().get(AllMaarsParameters.TIME_INTERVAL)
					.getAsInt();
			double startTime = System.currentTimeMillis();
			int frame = 0;
			while (System.currentTimeMillis() - startTime <= 1800000){
				double beginAcq = System.currentTimeMillis();
				String acqNameFluo = "\\movie_X"
												+Math.round(explo.getX(i))
												+"_Y"+Math.round(explo.getY(i))+
												"_FLUO\\" + frame;
				ImagePlus fluoImage = mafa.acquire(false, acqNameFluo);
				mfa.analyzeEntireField(fluoImage, mas.getPathToMovie()+"_FLUO\\" + frame);
				double acqTook = System.currentTimeMillis() - beginAcq;
				gui.sleep((long) (timeInterval - acqTook));
				frame++;
			}
//			int j = 0;
//			boolean mitosis = false;
//			j will equal to cellNumber so we can keep this loop, or maybe iterat loop.
//			while(j <  mfa.getSetOfCells().length() && !mitosis) {
//				ImagePlus fluoImage = mafa.acquire(false, j);
//				if (mfa.checkStartConditions(mfa.getSpindle(fluoImage, mfa.getSetOfCells().getCell(j)))) {
//					gui.message("mitosis");
//					mmad.acquire(true, mfa.getSetOfCells().getCell(j), false,true); //don't crop image because it is already cropped
//					mitosis = true;
//				}
//				j++;
//			}
		}
		// close roi manager
		mfa.getSetOfCells().closeRoiManager();
		mas.setParameters(params);
	}

	mmc.setAutoShutter(true);
	mmc.waitForDevice(mmc.getShutterDevice());
	gui.message("end "+System.currentTimeMillis());
	gui.message("it took "+(System.currentTimeMillis()-start));
	gui.message("DONE.");
	}else{
		gui.message("Session aborted, 0 field to analyse");
	}
	}else{
		gui.message("Session aborted, click 'OK' to start analyse.");
}
